---
API: 2.1
OpenSesame: 3.3.5
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "/Users/Alex/Documents/git/IAPN"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set canvas_backend psycho
set background black

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_inline_script always
	run outside_loop always

define loop experiment_loop
	set source_file "line-bisection_stim.csv"
	set source file
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run line_bisection

define inline_script experiment_script
	set description "Executes Python code"
	set _run ""
	___prepare__
	## preparing for the experiment
	# taking information from file_pool and converting to memoryview
	## things that need to be defined here: line length, fix size
	
	# start-point of the line
	var.start_pix = var.pix_permmX*var.start_mm
	var.end_pix = var.pix_permmX*var.end_mm
	var.y_pix = var.pix_permmX*var.line_y_pos
	__end__

define notepad getting_started
	__note__
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	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script global_prep
	set description "Executes Python code"
	___run__
	import csv
	from datetime import datetime
	from enum import Enum
	
	from libopensesame import sketchpad_elements
	from openexp.keyboard import keyboard
	
	# packages useful for generating random arrays and selecting from them
	# handing for varying target onset time
	import random
	from random import choice
	import numpy as np
	
	m = Mouse()
	myKeys = keyboard(exp, keylist=['space'])
	
	#beep = items['beep']
	#blank = items['blank']
	
	#response items
	stim, response = items['line'], items['line_mouse_response']
	#fixation = items['fixation']
	
	def in_bounds(x,y,bounds):
		left, top, right, bottom = bounds
		return x > left and x < right and y > top and y < bottom
	
	
	# screen width & height- as defined by participant in form
	var.width_cm = 60
	var.height_cm = 35.5
	
	#sizes in mm for reporting - based on resolution calculation earlier
	var.pix_permmX = width_px/(var.width_cm*10) #x resolution divided by widthx10
	var.pix_permmY = height_px/(var.height_cm*10) 
	
	# recording log file specfic to experiment
	subject_nr_string = str(var.subject_nr)
	date_str = datetime.now().isoformat()[:-7]
	#data_path = u'/home/experimenter/DMT-AD/DMT2019_rawdata/'
	#data_string = u'subject{sub}_{title}_{hand}_{date}.csv'
	#individual subject path
	#data_dir = os.path.join(data_path,subject_nr_string)
	#if not os.path.exists(data_dir):
			#os.makedirs(data_dir)
	#data_outpath = os.path.join(data_dir, data_string)
	#datafile = log.open(data_outpath.format(sub=subject_nr_string, date=date_str, title=var.title, hand=var.hand))
	
	# target onset time array
	#target_onset_values = list(np.arange(250,850,100))
	
	#manual trial counter for limiting experiment to max 50 trials
	#var.valid_trial_count = 0
	__end__
	set _prepare ""

define sketchpad line
	set duration 0
	set description "Displays stimuli"
	draw line color=white penwidth=5 show_if=always x1="[start_pix]" x2="[end_pix]" y1="[y_pix]" y2="[y_pix]" z_index=0

define sequence line_bisection
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run experiment_script always
	run line always
	run line_mouse_response always

define mouse_response line_mouse_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad line
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set allowed_responses left_button

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define form_multiple_choice new_form_multiple_choice
	set timeout infinite
	set spacing 10
	set question "Your question"
	__options__
	Yes
	No
	Maybe
	__end__
	set margins "50;50;50;50"
	set form_var response
	set form_title "Form title"
	set description "A simple multiple choice item"
	set button_text Ok
	set allow_multiple yes
	set advance_immediately yes
	set _theme gray

define inline_script new_inline_script
	set description "Executes Python code"
	___run__
	#### ALL IMPORTANT SCREEN RESOLUTION
	import pyautogui
	width_px, height_px = pyautogui.size()
	__end__
	set _prepare ""

define sketchpad new_sketchpad
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Instruction screen" x=0 y=0 z_index=0

define loop outside_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run outside_sequence

define sequence outside_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run global_prep always
	run new_sketchpad always
	run experiment_loop always
	run logger always

define form_text_input screen_size_form
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "Screen size"
	__form_question__
	What is the height of your screen?
	
	What is the width of your screen?
	__end__
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define sketchpad welcome
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="OpenSesame 3.3 <i>Lentiform Loewenfeld</i>" x=0 y=0 z_index=0

